# Generated by Configurator on Tue Oct 01 17:57:47 CEST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,PyHub,PyDevice,PyHub
Device,camera,PyDevice,Camera:camera
Device,stage,PyDevice,XYStage:stage

# Pre-init settings for devices
Property,PyHub,PythonEnvironment,(auto)
Property,PyHub,ScriptPath,./micro_manager_microscope.py

# Pre-init settings for COM ports

# Hub (parent) references
Parent,camera,PyHub
Parent,stage,PyHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,camera
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

